# 1 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht"
;cpmgpr1d
;avance-version (04/11/23)
;1D experiment with
;   T2 filter using Carr-Purcell-Meiboom-Gill sequence
;using f1 presaturation
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


;$OWNER=haofuhua
# 1 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/Avance.incl" 1
;Avance3.incl
;   for AVi
;
;avance-version (07/01/22)
;
;$CLASS=HighRes Incl
;$COMMENT=





































































































































;$Id: Avance3.incl,v 1.3.4.2 2007/01/22 13:38:52 ber Exp $
# 15 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht" 2

"acqt0=-p1*2/3.1416"

"p2=p1*2"
"d11=30m"
"d12=20u"


# 1 "mc_line 23 file C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht expanding definition part of mc command before ze"
define delay MCWRK
define delay MCREST
"MCWRK = 0.500000*30m"
"MCREST = 30m - 30m"
    dccorr
# 23 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht"
1 ze
# 1 "mc_line 23 file C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht expanding definition of mc command after ze"
# 24 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht"
# 1 "mc_line 24 file C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht expanding start label for mc command"
2 MCWRK  * 2
LBLF0, MCREST
# 25 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht"
  d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  p1 ph1
3 d20
  p2 ph2
  d20
  lo to 3 times l4
  go=2 ph31
# 1 "mc_line 35 file C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht expanding mc command in line"
  MCWRK wr #0
  MCWRK zd 
  lo to LBLF0 times td0

# 36 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/cpmgpr1d.ht"
exit


ph1=0 0 2 2 1 1 3 3 
ph2=1 3 1 3 0 2 0 2
ph29=0
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d20: fixed echo time to allow elimination of J-mod. effects 
;        d20 should be << 1/J ,but > (50 * P2)       [1-2 msec]
;l4: loop for T2 filter                              [4 - 20] 
;NS: 1 * n, total number of scans: NS * TD0
;DS: 16



;$Id: cpmgpr1d,v 1.4 2005/11/10 12:16:59 ber Exp $
